<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.GenICam;assembly=Bonsai.GenICam"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateReadMessage">
          <p1:FeatureName>ExposureTime</p1:FeatureName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0.5S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>96000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateWriteMessage">
          <p1:FeatureName>ExposureAuto</p1:FeatureName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateWriteMessage">
          <p1:FeatureName>ExposureAuto</p1:FeatureName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenICamDevice">
          <p1:ProducerPath />
          <p1:DeviceIndex>0</p1:DeviceIndex>
          <p1:CameraModel>Point Grey Research Flea3 FL3-U3-13S2M</p1:CameraModel>
          <p1:NumBuffers>4</p1:NumBuffers>
          <p1:FrameTimeoutMs>5000</p1:FrameTimeoutMs>
          <p1:Features>
            <p1:Feature name="ExposureMode" value="Timed" />
            <p1:Feature name="BlackLevelClampingEnable" value="False" />
            <p1:Feature name="AutoExposureTargetGreyValueAuto" value="Continuous" />
            <p1:Feature name="GainAuto" value="Off" />
            <p1:Feature name="AutoExposureTimeLowerLimit" value="0" />
          </p1:Features>
          <p1:AcquireFrames>true</p1:AcquireFrames>
          <p1:ChunkModeActive>false</p1:ChunkModeActive>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:ParseFeature">
        <p1:FeatureName>ExposureTime</p1:FeatureName>
        <p1:FeatureType>Float</p1:FeatureType>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FilterMessage">
          <p1:MessageType>Frame</p1:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Frame.Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Frame</Selector>
      </Expression>
      <Expression xsi:type="p1:ParseChunk">
        <p1:FeatureName />
        <p1:FeatureType>Float</p1:FeatureType>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="12" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source3" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>